PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = CMT
  keyboardBackend = ioHub
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Routines
  Routine arsalidou_instr
    TextComponent arsalisou_instr
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Вам будет показаны 9 цветных квадратов в матрице. Каждые 3 секунды цвета квадратов будут меняться.

        Ваша задача - ответить, совпадают ли цвета нового набора с прошлым.
        Внимание: считаются все цвета, КРОМЕ зеленого и синего! Эти цвета игнорируйте. Расположение цветов также не имеет значения!

        Если цвета не совпадают, нажмите "←".
        Если совпадают, нажмите "→".

        Чтобы начать тренировочный этап, нажмите любую кнопку.
    KeyboardComponent arsalidou_instr_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fix
    TextComponent blank
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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  Routine arsalidou_task
    CodeComponent loop_counting
      Code Type = Auto->JS
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      Begin Experiment:
        Nloop = 0
        msg = ' '
      Begin Routine:
        Nloop = Nloop+1
        if Nloop > 1:
            msg = '←  (НЕТ)       Совпадают с предыдущим?       (ДА)  →'
        if Nloop == 8:
            currentLoop.finished = True
    ImageComponent cmt_pic
      image [set every repeat] = $cmt_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent baloons_key
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent balloon_hint
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine fix_2
    CodeComponent resetloop
      Code Type = Auto->JS
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      Begin Routine:
        Nloop = 0
    TextComponent blank_2
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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  Routine finish_goodbye
    TextComponent byebye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        На этом эта методика окончена.

        Большое спасибо за участие!
  Routine arsalidou_instr_2
    TextComponent arsalisou_instr_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Тренировка окончена!

        Чтобы начать основной этап, нажмите любую кнопку.
    KeyboardComponent arsalidou_instr_key_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine train_confirm
    TextComponent trainconf_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Тренировка закончилась.

        Если вам понятен принцип задачи и вы готовы начать основную часть задачи, нажмите "Y".
        Если вы хотите пройти тренировку еще раз, нажмите "N".

        Вы можете перепройти тренировку 3 раза.
    KeyboardComponent trainconf
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent confirmation_code
      Code Type = Auto->JS
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      End Routine:
        if 'y' in trainconf.keys:
            training.finished = True
  Routine arsal_code_task
    TextComponent hintText
      letterHeight = 0.035
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 21
      text = ← (НЕТ) Совпадают с предыдущим? (ДА) →
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    CodeComponent matrix_code
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy import core
        import random

        # Colors
        blue = (-1, -1, 1)
        green = (-1, 1, -1)  # slightly “greener” than (0,1,0)
        variable_colors = [
            (1, 1, -1),   # bright yellow (no blue)
            (1, -1, -1),  # bright red
            (1, -0.2, -1),  # bright orange
            (1, -1, 1)    # bright magenta
        ]

        # Grid
        n_rows = 3
        n_cols = 3
        grid_size = 0.65
        cell_size = grid_size / n_rows
        square_size = cell_size * 0.9

        # Generate sequence with guaranteed repeat
        matrices = []
        for i in range(7):
            matrix_colors = []

            # choose exactly two variable colors for this matrix
            chosen_vars = random.sample(variable_colors, 2)

            for j in range(9):
                if random.random() < 0.3:
                    # blue/green as before
                    matrix_colors.append(random.choice([blue, green]))
                else:
                    # only from the two chosen variable colors
                    matrix_colors.append(random.choice(chosen_vars))

            matrices.append(matrix_colors)

        # Find repeat
        repeat_idx = None
        for i in range(1, 7):
            set_i = frozenset(c for c in matrices[i] if c not in (blue, green))
            for j in range(i):
                set_j = frozenset(c for c in matrices[j] if c not in (blue, green))
                if set_i == set_j:
                    repeat_idx = j
                    break
            if repeat_idx:
                break

        if not repeat_idx:
            repeat_idx = random.randint(0, 6)

        sequence = matrices + [matrices[repeat_idx]]

        # Timing
        step_duration = 3.0
        step_index = 0
        step_clock = core.Clock()
      Each Frame:
        # Draw 3x3 colored squares
        colors = sequence[step_index]
        square_idx = 0

        for i in range(3):
            for j in range(3):
                x = -0.325 + j*0.2167 + 0.1083
                y = -0.325 + i*0.2167 + 0.1083

                square = visual.Rect(win, width=0.18, height=0.18,
                                   pos=(x, y), fillColor=colors[square_idx],
                                   lineColor=colors[square_idx])
                square.draw()
                square_idx += 1

        # Advance step
        if step_clock.getTime() >= step_duration:
            step_clock.reset()
            step_index += 1
            if step_index >= 8:
                step_index = 7
      End Routine:
        thisExp.addData('sequence', sequence)
        thisExp.addData('repeat_idx', repeat_idx)
    KeyboardComponent matrix_resp
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 24
      store = all keys
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  Routine arsal_code_task_2
    TextComponent hintText_2
      letterHeight = 0.035
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 21
      text = ← (НЕТ) Совпадают с предыдущим? (ДА) →
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    CodeComponent matrix_code_2
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy import core
        import random

        # Colors
        blue = (-1, -1, 1)
        green = (-1, 1, -1)  # slightly “greener” than (0,1,0)
        variable_colors = [
            (1, 1, -1),   # bright yellow (no blue)
            (1, -1, -1),  # bright red
            (1, -0.2, -1),  # bright orange
            (1, -1, 1)    # bright magenta
        ]

        # Grid
        n_rows = 3
        n_cols = 3
        grid_size = 0.65
        cell_size = grid_size / n_rows
        square_size = cell_size * 0.9

        # Generate sequence with guaranteed repeat
        matrices = []
        for i in range(7):
            matrix_colors = []

            # choose exactly two variable colors for this matrix
            chosen_vars = random.sample(variable_colors, 3)

            for j in range(9):
                if random.random() < 0.3:
                    # blue/green as before
                    matrix_colors.append(random.choice([blue, green]))
                else:
                    # only from the two chosen variable colors
                    matrix_colors.append(random.choice(chosen_vars))

            matrices.append(matrix_colors)

        # Find repeat
        repeat_idx = None
        for i in range(1, 7):
            set_i = frozenset(c for c in matrices[i] if c not in (blue, green))
            for j in range(i):
                set_j = frozenset(c for c in matrices[j] if c not in (blue, green))
                if set_i == set_j:
                    repeat_idx = j
                    break
            if repeat_idx:
                break

        if not repeat_idx:
            repeat_idx = random.randint(0, 6)

        sequence = matrices + [matrices[repeat_idx]]

        # Timing
        step_duration = 3.0
        step_index = 0
        step_clock = core.Clock()
      Each Frame:
        # Draw 3x3 colored squares
        colors = sequence[step_index]
        square_idx = 0

        for i in range(3):
            for j in range(3):
                x = -0.325 + j*0.2167 + 0.1083
                y = -0.325 + i*0.2167 + 0.1083

                square = visual.Rect(win, width=0.18, height=0.18,
                                   pos=(x, y), fillColor=colors[square_idx],
                                   lineColor=colors[square_idx])
                square.draw()
                square_idx += 1

        # Advance step
        if step_clock.getTime() >= step_duration:
            step_clock.reset()
            step_index += 1
            if step_index >= 8:
                step_index = 7
      End Routine:
        thisExp.addData('sequence', sequence)
        thisExp.addData('repeat_idx', repeat_idx)
    KeyboardComponent matrix_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 24
      store = all keys
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  Routine arsal_code_task_3
    TextComponent hintText_3
      letterHeight = 0.035
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 21
      text = ← (НЕТ) Совпадают с предыдущим? (ДА) →
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    CodeComponent matrix_code_3
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy import core
        import random

        # Colors
        blue = (-1, -1, 1)
        green = (-1, 1, -1)  # slightly “greener” than (0,1,0)
        variable_colors = [
            (1, 1, -1),   # bright yellow (no blue)
            (1, -1, -1),  # bright red
            (1, -0.2, -1),  # bright orange
            (1, -1, 1)    # bright magenta
        ]

        # Grid
        n_rows = 3
        n_cols = 3
        grid_size = 0.65
        cell_size = grid_size / n_rows
        square_size = cell_size * 0.9

        # Generate sequence with guaranteed repeat
        matrices = []
        for i in range(7):
            matrix_colors = []

            # choose exactly two variable colors for this matrix
            chosen_vars = random.sample(variable_colors, 4)

            for j in range(9):
                if random.random() < 0.3:
                    # blue/green as before
                    matrix_colors.append(random.choice([blue, green]))
                else:
                    # only from the two chosen variable colors
                    matrix_colors.append(random.choice(chosen_vars))

            matrices.append(matrix_colors)

        # Find repeat
        repeat_idx = None
        for i in range(1, 7):
            set_i = frozenset(c for c in matrices[i] if c not in (blue, green))
            for j in range(i):
                set_j = frozenset(c for c in matrices[j] if c not in (blue, green))
                if set_i == set_j:
                    repeat_idx = j
                    break
            if repeat_idx:
                break

        if not repeat_idx:
            repeat_idx = random.randint(0, 6)

        sequence = matrices + [matrices[repeat_idx]]

        # Timing
        step_duration = 3.0
        step_index = 0
        step_clock = core.Clock()
      Each Frame:
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      End Routine:
        thisExp.addData('sequence', sequence)
        thisExp.addData('repeat_idx', repeat_idx)
    KeyboardComponent matrix_resp_3
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 24
      store = all keys
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Flow
  Routine arsalidou_instr
  LoopInitiator training loopType="TrialHandler"
    loopType = random
    nReps = 4
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    LoopInitiator arsal_train loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine fix
      Routine arsal_code_task
    LoopTerminator arsal_train
    Routine fix
    Routine train_confirm
  LoopTerminator training
  Routine arsalidou_instr_2
  LoopInitiator arsal_s2 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine fix
    Routine arsal_code_task
  LoopTerminator arsal_s2
  LoopInitiator arsal_s3 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine fix
    Routine arsal_code_task_2
  LoopTerminator arsal_s3
  LoopInitiator arsal_s4 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine fix
    Routine arsal_code_task_3
  LoopTerminator arsal_s4
  Routine finish_goodbye
