PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = MR
  keyboardBackend = ioHub
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Routines
  Routine changedetect_instr
  Routine arsalidou_instr
    TextComponent arsalidou_announce
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Задача на запоминание цветов
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    TextComponent arsalisou_instr
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 2.0
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      text:
        Вам будет показана сетка из 9 цветных квадратов. Каждые 3 секунды цвета квадратов будут меняться.

        Ваша задача - ответить, совпадают ли цвета нового набора с прошлым. Расположение цветов не имеет значения!

        Если цвета совпадают, нажмите "A". Если не совпадают, нажмите "D".

        Чтобы начать тренировочный этап, нажмите любую кнопку.
    KeyboardComponent arsalidou_instr_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.0
      store = nothing
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  Routine fix
    TextComponent blank
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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  Routine arsalidou_task
    CodeComponent loop_counting
      Code Type = Auto->JS
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      Begin Experiment:
        Nloop = 0
      Begin Routine:
        if Nloop == 7:
            currentLoop.finished = True
        Nloop = Nloop+1
    ImageComponent cmt_img
      image [set every repeat] = $picname
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent baloons_key
      allowedKeys = 'a','d'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent balloon_hint
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = ← A  (ДА)           Совпадают?           (НЕТ) D →
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  Routine fix_2
    CodeComponent resetloop
      Code Type = Auto->JS
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      Begin Routine:
        Nloop = 0
    TextComponent blank_2
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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  Routine CC_trial
    PolygonComponent clr1examp_2
      fillColor [set every repeat] = $clr1p1
      pos = (-0.3375, 0.075)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent clr2examp_2
      fillColor [set every repeat] = $clr2p1
      pos = (-0.1125, 0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent clr3examp_2
      fillColor [set every repeat] = $clr3p1
      pos = (0.1125, 0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent clr4examp_2
      fillColor [set every repeat] = $clr4p1
      pos = (0.3375, 0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent clr1trial_2
      fillColor [set every repeat] = $clr1p2
      pos = (-0.3375, -0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2.5
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    PolygonComponent clr2trail_2
      fillColor [set every repeat] = $clr2p2
      pos = (-0.1125, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2.5
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    PolygonComponent clr3trail_2
      fillColor [set every repeat] = $clr3p2
      pos = (0.1125, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2.5
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    PolygonComponent clr4trail_2
      fillColor [set every repeat] = $clr4p2
      pos = (0.3375, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2.5
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    PolygonComponent MASKclr1tr_2
      fillColor [set every repeat] = black
      pos = (-0.3375, -0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1
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    PolygonComponent MASKclr2tr_2
      fillColor [set every repeat] = black
      pos = (-0.1125, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1
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    PolygonComponent MASKclr3tr_2
      fillColor [set every repeat] = black
      pos = (0.1125, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent MASKclr4tr_2
      fillColor [set every repeat] = black
      pos = (0.3375, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1
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  Routine CC_instr
    TextComponent CC_announce
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Задачи на представление пропущенного цвета
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    TextComponent CC_instr_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 2.0
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      text:
        Вам будет показаны 2 последовательности цветных квадратов, сделанных по аналогии друг другу. Они будут появляться друг за другом, сначала полная, потом — с одним пропущенным, черным, квадратом.

        Вам нужно представить недостающий цвет согласно последовательности и выбрать тот квадрат из представленных двух вариантов, который соответствует представленному цвету.
        Выбор нужного квадрата производится клавишами "A" (левый) и "D" (правый).

        Чтобы начать тренировочный этап, нажмите ПРОБЕЛ.
    KeyboardComponent CC_instr_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.0
      store = nothing
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  Routine CC_answer
    PolygonComponent l_point
      fillColor [set every repeat] = $l_test
      pos = (-0.2, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    PolygonComponent r_point
      fillColor [set every repeat] = $r_test
      pos = (0.2, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent CC_resp
      allowedKeys = 'a', 'd'
      correctAns = $answ
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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  Routine finish_goodbye
    TextComponent byebye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        На этом эксперимент окончен.

        Большое спасибо за участие!
  Routine CC_instr_2
    TextComponent CC_instr_txt_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Тренировочный этап окончен!

        Еще раз: Вам нужно представить недостающий цвет согласно последовательности и выбрать тот квадрат из представленных двух вариантов, который соответствует представленному цвету.
        Выбор нужного квадрата производится клавишами "A" (левый) и "D" (правый).

        Чтобы начать основной этап, нажмите ПРОБЕЛ.
    KeyboardComponent CC_instr_key_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine CC_FB
    CodeComponent FB_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        msg='empty!'#if this comes up we forgot to update the msg!
      Begin Routine:
        if not CC_resp.keys :
            msg="no answer"
        elif CC_resp.corr:#stored on last run routine
            msg="Да! Правильный:"
        else:
            msg="Нет! Правильный:"
    TextComponent FB_text_2
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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    PolygonComponent clractual
      fillColor [set every repeat] = $realclr
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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  Routine arsalidou_instr_2
    TextComponent arsalisou_instr_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Тренировка окончена!

        Чтобы начать основной этап, нажмите любую кнопку.
    KeyboardComponent arsalidou_instr_key_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine mentalrot_instr
    TextComponent mentalrot_announce
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Задача на ментальное вращение
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    TextComponent mentalrot_instr_txt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 2.0
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      text:
        Вам будут показаны пары фигур: одна слева, другая справа от центра экрана. Ваша задача — как можно быстрее определить, одинаковые ли это фигуры (одна повёрнута относительно другой) или разные (одна является зеркальным отражением другой).

        Если фигуры одинаковые, нажмите кнопку "←".
        Если фигуры разные (зеркальные), нажмите кнопку "→".

        Старайтесь не поворачивать голову — используйте только воображение.

        Чтобы начать тренировочный этап, нажмите любую кнопку.
    KeyboardComponent mentalrot_instr_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.0
      store = nothing
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  Routine mentalrot_instr_2
    TextComponent mentalrot_instr_txt_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Тренировка окончена!

        Чтобы начать основной этап, нажмите любую кнопку.
    KeyboardComponent mentalrot_instr_key_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine mentalrot_task
    ImageComponent mr_image
      image [set every repeat] = $imagefile
      pos = (-0.4, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent mr_stim
      flipHoriz = True
      image [set every repeat] = $stimfile
      pos = (0.4, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent mr_answ
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent mr_hint
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = ← (ДА)           Та же фигура?           (НЕТ) →
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  Routine mentalrot_train
    ImageComponent mr_image_2
      image [set every repeat] = $imagefile
      pos = (-0.4, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent mr_stim_2
      flipHoriz = True
      image [set every repeat] = $stimfile
      pos = (0.4, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent mr_answ_2
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent mr_hint_2
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = ← (ДА)           Та же фигура?           (НЕТ) →
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if training.thisN == 4:
            currentLoop.finished = True
Flow
  Routine mentalrot_instr
  LoopInitiator training loopType="TrialHandler"
    conditionsFile = mr_condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_b_z_45.png', 'corrleftns': 'right', 'MRdir': 'cw', 'angle': 45},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_a_z_45.png', 'corrleftns': 'left', 'MRdir': 'cw', 'angle': 45},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_b_z_315.png', 'corrleftns': 'right', 'MRdir': 'ccw', 'angle': 45},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_a_z_315.png', 'corrleftns': 'left', 'MRdir': 'ccw', 'angle': 45},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_b_z_90.png', 'corrleftns': 'right', 'MRdir': 'cw', 'angle': 90},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_a_z_90.png', 'corrleftns': 'left', 'MRdir': 'cw', 'angle': 90},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_b_z_270.png', 'corrleftns': 'right', 'MRdir': 'ccw', 'angle': 90},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_a_z_270.png', 'corrleftns': 'left', 'MRdir': 'ccw', 'angle': 90},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_b_z_135.png', 'corrleftns': 'right', 'MRdir': 'cw', 'angle': 135},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_a_z_135.png', 'corrleftns': 'left', 'MRdir': 'cw', 'angle': 135},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_b_z_225.png', 'corrleftns': 'right', 'MRdir': 'ccw', 'angle': 135},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_a_z_225.png', 'corrleftns': 'left', 'MRdir': 'ccw', 'angle': 135}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
    Routine fix
    Routine mentalrot_train
  LoopTerminator training
  Routine mentalrot_instr_2
  LoopInitiator mentalrot_trials loopType="TrialHandler"
    conditionsFile = mr_condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_b_z_45.png', 'corrAns': 'd', 'MRdir': 'cw', 'angle': 45},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_a_z_45.png', 'corrAns': 'a', 'MRdir': 'cw', 'angle': 45},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_b_z_315.png', 'corrAns': 'd', 'MRdir': 'ccw', 'angle': 45},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_a_z_315.png', 'corrAns': 'a', 'MRdir': 'ccw', 'angle': 45},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_b_z_90.png', 'corrAns': 'd', 'MRdir': 'cw', 'angle': 90},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_a_z_90.png', 'corrAns': 'a', 'MRdir': 'cw', 'angle': 90},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_b_z_270.png', 'corrAns': 'd', 'MRdir': 'ccw', 'angle': 90},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_a_z_270.png', 'corrAns': 'a', 'MRdir': 'ccw', 'angle': 90},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_b_z_135.png', 'corrAns': 'd', 'MRdir': 'cw', 'angle': 135},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_a_z_135.png', 'corrAns': 'a', 'MRdir': 'cw', 'angle': 135},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_b_z_225.png', 'corrAns': 'd', 'MRdir': 'ccw', 'angle': 135},
      {'imagefile': 'mr_images/1_a.png', 'stimfile': 'mr_images/1_a_z_225.png', 'corrAns': 'a', 'MRdir': 'ccw', 'angle': 135}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
    Routine fix
    Routine mentalrot_task
  LoopTerminator mentalrot_trials
  Routine finish_goodbye
