PsychoPy2experiment version="2023.1.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = black
  expName = MCT
  keyboardBackend = ioHub
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Routines
  Routine CC_trial
    PolygonComponent clr1examp
      fillColor [set every repeat] = $clr1p1
      pos = (-0.3375, 0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent clr2examp
      fillColor [set every repeat] = $clr2p1
      pos = (-0.1125, 0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent clr3examp
      fillColor [set every repeat] = $clr3p1
      pos = (0.1125, 0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent clr4examp
      fillColor [set every repeat] = $clr4p1
      pos = (0.3375, 0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent clr1trial
      fillColor [set every repeat] = $clr1p2
      pos = (-0.3375, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2.5
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    PolygonComponent clr2trail
      fillColor [set every repeat] = $clr2p2
      pos = (-0.1125, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2.5
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    PolygonComponent clr3trail
      fillColor [set every repeat] = $clr3p2
      pos = (0.1125, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2.5
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    PolygonComponent clr4trail
      fillColor [set every repeat] = $clr4p2
      pos = (0.3375, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2.5
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    KeyboardComponent key_skip
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      store = nothing
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    PolygonComponent MASKclr1tr
      fillColor [set every repeat] = black
      pos = (-0.3375, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1
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    PolygonComponent MASKclr2tr
      fillColor [set every repeat] = black
      pos = (-0.1125, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1
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    PolygonComponent MASKclr3tr
      fillColor [set every repeat] = black
      pos = (0.1125, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1
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    PolygonComponent MASKclr4tr
      fillColor [set every repeat] = black
      pos = (0.3375, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1
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  Routine CC_answer
    PolygonComponent l_point
      fillColor [set every repeat] = $l_test
      pos = (-0.2, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    PolygonComponent r_point
      fillColor [set every repeat] = $r_test
      pos = (0.2, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent CC_resp
      allowedKeys = 'left','right'
      correctAns = $answ
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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  Routine blank
    PolygonComponent fix
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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  Routine CC_trainAnsw
    PolygonComponent l_point_2
      fillColor [set every repeat] = $l_test
      pos = (-0.2, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    PolygonComponent r_point_2
      fillColor [set every repeat] = $r_test
      pos = (0.2, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent CC_resp_2
      allowedKeys = 'left','right', 'space'
      correctAns = $answ
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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  Routine FB
    CodeComponent loop_stop
      Code Type = Auto->JS
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      Begin Experiment:
        msg='empty!'#if this comes up we forgot to update the msg!
      Begin Routine:
        if not CC_resp_2.keys :
            msg="Нет ответа"
        elif CC_resp_2.corr:#stored on last run routine
            msg="Да! Правильный цвет:"
        else:
            msg="Нет! Вот правильный:"
      End Routine:
        if training.thisN == 3:
            currentLoop.finished = True
    TextComponent FB_txt
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg
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    PolygonComponent FB_clr
      fillColor [set every repeat] = $realclr
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine finish
    TextComponent finish_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Это мучение закончилось!
        Подождите, когда эксперимент закроется.
  Routine CC_instr2
    TextComponent instr2_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Отлично! Теперь все по-настоящему, без обратной связи. Пожалуйста, не отвлекайтесь, сосредоточьтесь на задачах.

        Если вы готовы начать основной этап, нажмите ПРОБЕЛ.
    KeyboardComponent instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine CC_instr
    TextComponent instr_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Вам будет показаны 2 последовательности цветных квадратов, сделанных по аналогии друг другу. Они будут появляться друг за другом, сначала полная, потом — с одним пропущенным, черным, квадратом.

        Вам нужно представить недостающий цвет согласно последовательности и выбрать тот квадрат из представленных двух вариантов, который соответствует представленному цвету.
        Выбор нужного квадрата производится клавишами "←" и "→".

        Сначала будет тренировочный этап с обратной связью, чтобы вы научились. Будет дано 8 задач.

        Чтобы начать тренировку, нажмите ПРОБЕЛ.
    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine hello
    TextComponent hello_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Здравствуйте!

        Это основная часть исследования на воображение. Вам будет дана инструкция, после чего вы сможете пройти тренировочный и основной этапы.

        Чтобы перейти дальше, нажмите ПРОБЕЛ.
    KeyboardComponent hello_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine CC_instr
  LoopInitiator training loopType="TrialHandler"
    conditionsFile = CC_easylowhard_generalcond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ID': 2, 'clr1p1': '#E0F2F1', 'clr2p1': '#4DB6AC', 'clr3p1': '#00897B', 'clr4p1': '#004D40', 'clr1p2': '#FFFDE7', 'clr2p2': '#000000', 'clr3p2': '#FDD835', 'clr4p2': '#F57F17', 'Hshow': 'teal', 'Htest': 'yellow', 'stim_var': 'l_down', 'blank_clr': 'clr2', 'difficulty': 'high', 'answ': 'left', 'l_test': '#FFF176', 'r_test': '#FFF59D', 'realclr2': '#FFF176', 'realclr3': '#FDD835', 'realclr': '#FFF176', 'fake_hue': 'yellow'},
      {'ID': 3, 'clr1p1': '#EFEBE9', 'clr2p1': '#A1887F', 'clr3p1': '#6D4C41', 'clr4p1': '#3E2723', 'clr1p2': '#E8F5E9', 'clr2p2': '#000000', 'clr3p2': '#43A047', 'clr4p2': '#1B5E20', 'Hshow': 'brown', 'Htest': 'green', 'stim_var': 'l_down', 'blank_clr': 'clr2', 'difficulty': 'high', 'answ': 'left', 'l_test': '#81C784', 'r_test': '#A5D6A7', 'realclr2': '#81C784', 'realclr3': '#43A047', 'realclr': '#81C784', 'fake_hue': 'green'},
      {'ID': 4, 'clr1p1': '#FFEBEE', 'clr2p1': '#E57373', 'clr3p1': '#E53935', 'clr4p1': '#B71C1C', 'clr1p2': '#FFFDE7', 'clr2p2': '#000000', 'clr3p2': '#FDD835', 'clr4p2': '#F57F17', 'Hshow': 'red', 'Htest': 'yellow', 'stim_var': 'l_down', 'blank_clr': 'clr2', 'difficulty': 'high', 'answ': 'left', 'l_test': '#FFF176', 'r_test': '#FFEE58', 'realclr2': '#FFF176', 'realclr3': '#FDD835', 'realclr': '#FFF176', 'fake_hue': 'yellow'},
      {'ID': 5, 'clr1p1': '#FCE4EC', 'clr2p1': '#F06292', 'clr3p1': '#D81B60', 'clr4p1': '#880E4F', 'clr1p2': '#FBE9E7', 'clr2p2': '#000000', 'clr3p2': '#F4511E', 'clr4p2': '#BF360C', 'Hshow': 'pink', 'Htest': 'd_orange', 'stim_var': 'l_down', 'blank_clr': 'clr2', 'difficulty': 'high', 'answ': 'right', 'l_test': '#FFAB91', 'r_test': '#FF8A65', 'realclr2': '#FF8A65', 'realclr3': '#F4511E', 'realclr': '#FF8A65', 'fake_hue': 'd_orange'}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
    Routine blank
    Routine CC_trial
    Routine blank
    Routine CC_trainAnsw
    Routine FB
  LoopTerminator training
  Routine CC_instr2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = CC_easylowhard_generalcond.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine CC_trial
    Routine blank
    Routine CC_answer
    Routine blank
  LoopTerminator trials
  Routine finish
