PsychoPy2experiment version="2023.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = SS
  keyboardBackend = ioHub
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Routines
  Routine fix
    PolygonComponent fix1
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine goodbye
    TextComponent bye_txt
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Спасибо за участие!
      units = norm
      wrapWidth = 1.8
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  Routine timebreak
    TextComponent timeout_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        когда вы будете готовы продолжить

        нажмите ПРОБЕЛ
    KeyboardComponent timeout_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent countreset
      Code Type = Auto->JS
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      Begin Routine:
        Nloop = 0
  Routine trial_2n
    CodeComponent griddot2
      Code Type = Auto->JS
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      Begin Routine:
        # Define grid parameters
        n_rows = 3
        n_cols = 3
        grid_size = 0.65  # size in normalized units (0 to 1)
        cell_size = grid_size / n_rows

        # Create grid lines using Rect
        grid_lines = []
        for i in range(n_rows + 1):
            # Horizontal lines
            y = -grid_size/2 + i*cell_size
            line = visual.Rect(win, width=grid_size, height=0.01, pos=(0, y), fillColor='white', lineColor='white')
            grid_lines.append(line)

        for j in range(n_cols + 1):
            # Vertical lines
            x = -grid_size/2 + j*cell_size
            line = visual.Rect(win, width=0.01, height=grid_size, pos=(x, 0), fillColor='white', lineColor='white')
            grid_lines.append(line)

        # Create the dot
        dot = visual.Circle(win, radius=0.04, fillColor='red', lineColor='red')

        step_duration = 2  # seconds per step
        step_index = 0
        step_clock = core.Clock()

        if Nloop == 5:
            currentLoop.finished = True
        Nloop = Nloop+1
      Each Frame:
        if step_index < len(sequence):
            row_index, col_index = sequence[step_index]
            dot.pos = (-grid_size/2 + (col_index + 0.5) * cell_size,
                       -grid_size/2 + (row_index + 0.5) * cell_size)

            # Set color for first two dots, else default to red
            if step_index < 2:
                dot.fillColor = 'orange'
                dot.lineColor = 'orange'
            else:
                dot.fillColor = 'red'
                dot.lineColor = 'red'

            for line in grid_lines:
                line.draw()

            current_time = step_clock.getTime()

            # Draw dot only if within first 1.8 seconds of the step
            if current_time < 1.8:
                dot.draw()

            if current_time >= step_duration:  # step_duration should be 2.0 seconds
                step_clock.reset()
                step_index += 1
        else:
            continueRoutine = False
    KeyboardComponent griddot_resp2
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16
      store = all keys
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  Routine trial_3n
    CodeComponent griddot3
      Code Type = Auto->JS
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      Begin Routine:
        # Define grid parameters
        n_rows = 3
        n_cols = 3
        grid_size = 0.65  # size in normalized units (0 to 1)
        cell_size = grid_size / n_rows

        # Create grid lines using Rect
        grid_lines = []
        for i in range(n_rows + 1):
            # Horizontal lines
            y = -grid_size/2 + i*cell_size
            line = visual.Rect(win, width=grid_size, height=0.01, pos=(0, y), fillColor='white', lineColor='white')
            grid_lines.append(line)

        for j in range(n_cols + 1):
            # Vertical lines
            x = -grid_size/2 + j*cell_size
            line = visual.Rect(win, width=0.01, height=grid_size, pos=(x, 0), fillColor='white', lineColor='white')
            grid_lines.append(line)

        # Create the dot
        dot = visual.Circle(win, radius=0.04, fillColor='red', lineColor='red')

        step_duration = 2  # seconds per step
        step_index = 0
        step_clock = core.Clock()

        if Nloop == 5:
            currentLoop.finished = True
        Nloop = Nloop+1
      Each Frame:
        if step_index < len(sequence):
            row_index, col_index = sequence[step_index]
            dot.pos = (-grid_size/2 + (col_index + 0.5) * cell_size,
                       -grid_size/2 + (row_index + 0.5) * cell_size)

            # Set color for first two dots, else default to red
            if step_index < 3:
                dot.fillColor = 'purple'
                dot.lineColor = 'purple'
            else:
                dot.fillColor = 'red'
                dot.lineColor = 'red'

            for line in grid_lines:
                line.draw()

            current_time = step_clock.getTime()

            # Draw dot only if within first 1.8 seconds of the step
            if current_time < 1.8:
                dot.draw()

            if current_time >= step_duration:  # step_duration should be 2.0 seconds
                step_clock.reset()
                step_index += 1
        else:
            continueRoutine = False
    KeyboardComponent griddot_resp3
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18
      store = all keys
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  Routine buffering_2_3
    TextComponent buffer23_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        с этого момента задачи

        «три шага назад»
        («то же, что и позапозапрошлое?»)
    CodeComponent countreset_3
      Code Type = Auto->JS
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      Begin Routine:
        Nloop = 0
  Routine buffering_3_4
    TextComponent buffer34_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        с этого момента задачи

        «четыре шага назад»
    CodeComponent countreset_4
      Code Type = Auto->JS
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      Begin Routine:
        Nloop = 0
  Routine trial_4n
    CodeComponent griddot4
      Code Type = Auto->JS
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      Begin Routine:
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      Each Frame:
        if step_index < len(sequence):
            row_index, col_index = sequence[step_index]
            dot.pos = (-grid_size/2 + (col_index + 0.5) * cell_size,
                       -grid_size/2 + (row_index + 0.5) * cell_size)

            # Set color for first two dots, else default to red
            if step_index < 4:
                dot.fillColor = 'yellow'
                dot.lineColor = 'yellow'
            else:
                dot.fillColor = 'red'
                dot.lineColor = 'red'

            for line in grid_lines:
                line.draw()

            current_time = step_clock.getTime()

            # Draw dot only if within first 1.8 seconds of the step
            if current_time < 1.8:
                dot.draw()

            if current_time >= step_duration:  # step_duration should be 2.0 seconds
                step_clock.reset()
                step_index += 1
        else:
            continueRoutine = False
    KeyboardComponent griddot_resp4
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      store = all keys
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  Routine test_2n
    CodeComponent test_griddot2
      Code Type = Auto->JS
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      Begin Routine:
        # Define grid parameters
        n_rows = 3
        n_cols = 3
        grid_size = 0.65  # size in normalized units (0 to 1)
        cell_size = grid_size / n_rows

        # Create grid lines using Rect
        grid_lines = []
        for i in range(n_rows + 1):
            # Horizontal lines
            y = -grid_size/2 + i*cell_size
            line = visual.Rect(win, width=grid_size, height=0.01, pos=(0, y), fillColor='white', lineColor='white')
            grid_lines.append(line)

        for j in range(n_cols + 1):
            # Vertical lines
            x = -grid_size/2 + j*cell_size
            line = visual.Rect(win, width=0.01, height=grid_size, pos=(x, 0), fillColor='white', lineColor='white')
            grid_lines.append(line)

        # Create the dot
        dot = visual.Circle(win, radius=0.04, fillColor='red', lineColor='red')

        step_duration = 2  # seconds per step
        step_index = 0
        step_clock = core.Clock()

        if Nloop == 2:
            currentLoop.finished = True
        Nloop = Nloop+1
      Each Frame:
        if step_index < len(sequence):
            row_index, col_index = sequence[step_index]
            dot.pos = (-grid_size/2 + (col_index + 0.5) * cell_size,
                       -grid_size/2 + (row_index + 0.5) * cell_size)

            # Set color for first two dots, else default to red
            if step_index < 2:
                dot.fillColor = 'orange'
                dot.lineColor = 'orange'
            else:
                dot.fillColor = 'red'
                dot.lineColor = 'red'

            for line in grid_lines:
                line.draw()

            current_time = step_clock.getTime()

            # Draw dot only if within first 1.8 seconds of the step
            if current_time < 1.8:
                dot.draw()

            if current_time >= step_duration:  # step_duration should be 2.0 seconds
                step_clock.reset()
                step_index += 1
        else:
            continueRoutine = False
    KeyboardComponent test_griddot_resp2
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16
      store = all keys
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    TextComponent hint_no2
      letterHeight = 0.05
      pos = (-0.6, -0.35)
      saveStartStop = False
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 12
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      text:
        нет
        ←
    TextComponent hint_quest2
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 12
      text = как позапрошлая?
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    TextComponent hint_yes2
      letterHeight = 0.05
      pos = (0.6, -0.35)
      saveStartStop = False
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 12
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      text:
        да
        →
  Routine test_3n
    CodeComponent test_griddot3
      Code Type = Auto->JS
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      Begin Routine:
        # Define grid parameters
        n_rows = 3
        n_cols = 3
        grid_size = 0.65  # size in normalized units (0 to 1)
        cell_size = grid_size / n_rows

        # Create grid lines using Rect
        grid_lines = []
        for i in range(n_rows + 1):
            # Horizontal lines
            y = -grid_size/2 + i*cell_size
            line = visual.Rect(win, width=grid_size, height=0.01, pos=(0, y), fillColor='white', lineColor='white')
            grid_lines.append(line)

        for j in range(n_cols + 1):
            # Vertical lines
            x = -grid_size/2 + j*cell_size
            line = visual.Rect(win, width=0.01, height=grid_size, pos=(x, 0), fillColor='white', lineColor='white')
            grid_lines.append(line)

        # Create the dot
        dot = visual.Circle(win, radius=0.04, fillColor='red', lineColor='red')

        step_duration = 2  # seconds per step
        step_index = 0
        step_clock = core.Clock()

        if Nloop == 2:
            currentLoop.finished = True
        Nloop = Nloop+1
      Each Frame:
        if step_index < len(sequence):
            row_index, col_index = sequence[step_index]
            dot.pos = (-grid_size/2 + (col_index + 0.5) * cell_size,
                       -grid_size/2 + (row_index + 0.5) * cell_size)

            # Set color for first two dots, else default to red
            if step_index < 3:
                dot.fillColor = 'purple'
                dot.lineColor = 'purple'
            else:
                dot.fillColor = 'red'
                dot.lineColor = 'red'

            for line in grid_lines:
                line.draw()

            current_time = step_clock.getTime()

            # Draw dot only if within first 1.8 seconds of the step
            if current_time < 1.8:
                dot.draw()

            if current_time >= step_duration:  # step_duration should be 2.0 seconds
                step_clock.reset()
                step_index += 1
        else:
            continueRoutine = False
    KeyboardComponent test_griddot_resp3
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18
      store = all keys
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    TextComponent hint_no3
      letterHeight = 0.05
      pos = (-0.6, -0.35)
      saveStartStop = False
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = 12
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      text:
        нет
        ←
    TextComponent hint_quest3
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = 12
      text = как позапозапрошлая?
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    TextComponent hint_yes3
      letterHeight = 0.05
      pos = (0.6, -0.35)
      saveStartStop = False
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = 12
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      text:
        да
        →
  Routine test_4n
    CodeComponent test_griddot4
      Code Type = Auto->JS
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      Begin Routine:
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      Each Frame:
        if step_index < len(sequence):
            row_index, col_index = sequence[step_index]
            dot.pos = (-grid_size/2 + (col_index + 0.5) * cell_size,
                       -grid_size/2 + (row_index + 0.5) * cell_size)

            # Set color for first two dots, else default to red
            if step_index < 4:
                dot.fillColor = 'yellow'
                dot.lineColor = 'yellow'
            else:
                dot.fillColor = 'red'
                dot.lineColor = 'red'

            for line in grid_lines:
                line.draw()

            current_time = step_clock.getTime()

            # Draw dot only if within first 1.8 seconds of the step
            if current_time < 1.8:
                dot.draw()

            if current_time >= step_duration:  # step_duration should be 2.0 seconds
                step_clock.reset()
                step_index += 1
        else:
            continueRoutine = False
    KeyboardComponent test_griddot_resp4
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      store = all keys
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    TextComponent hint_no4
      letterHeight = 0.05
      pos = (-0.6, -0.35)
      saveStartStop = False
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 12
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      text:
        нет
        ←
    TextComponent hint_yes4
      letterHeight = 0.05
      pos = (0.6, -0.35)
      saveStartStop = False
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 12
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      text:
        да
        →
    TextComponent hint_quest4
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 12
      text = как 4 шага назад?
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  Routine test_confirm
    TextComponent confirm_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Понятен ли вам принцип задания?

        Если да и вы готовы начать основную часть, нажмите "Y"
        Если нет и вы хотите еще раз повторить тренировку, нажмите "N"
    KeyboardComponent confirm_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent confirm_cond
      Code Type = Auto->JS
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      End Routine:
        if 'y' in confirm_resp.keys:
            training_session.finished = True
  Routine instruction_1
    TextComponent instr_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        В этом задании на экране будет появляться точка, которая каждый раз перемещается в одно из нескольких возможных мест. Ваша задача — следить за расположением точки и запоминать последовательность её позиций.

        Через некоторое время вам нужно будет решать, совпадает ли текущее положение точки с положением, которое было несколько шагов назад.

        Например:
        В варианте "2-back" следует определить, находится ли точка в том же месте, что и два шага назад (позапрошлое);
        В варианте "3-back" — то же самое, но с позицией три шага назад (позапозапрошлое);
        В варианте "4-back" — с позицией четыре шага назад.

        Начинайте отвечать, когда точка становится красной. Отвечайте каждый раз, когда точка меняет положение.

        Если текущее положение не совпадает с тем, которое было указанное количество шагов назад, нажмите клавишу "←".
        Если совпадает — нажмите "→".

        Старайтесь отвечать как можно быстрее и точнее. После короткой тренировки начнётся основная часть эксперимента.
        Если вы готовы начать тренировку, нажмите «пробел».
    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent begin_setup
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy.core as core
        # Initialize global clock
        globalClock = core.Clock()
        Nloop = 0
  Routine instruction_2
    TextComponent instr_text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Тренировка закончилась.

        Напоминаем, что в этом задании на экране будет появляться точка, позиции которой нужно будет запоминать. Вам нужно будет решать, совпадает ли текущее положение точки с положением, которое было несколько шагов назад. Например:

        В варианте «2-back» следует определить, находится ли точка в том же месте, что и два шага назад; «3-back» — то же самое, но с позицией три шага назад; «4-back» — с позицией четыре шага назад.

        Отвечайте, когда точка станет красной.
        Если текущее положение не совпадает с тем, что было указанное количество шагов назад, нажмите клавишу "←".
        Если совпадает — нажмите "→".

        Старайтесь отвечать как можно быстрее и точнее. После короткой тренировки начнётся основная часть эксперимента.

        Если вы все поняли и готовы начинать основную часть эксперимента, нажмите "пробел".
    KeyboardComponent instr_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent begin_setup_2
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy.core as core

        Nloop = 0
  Routine buffering_0_2
    TextComponent buffer02_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        с этого момента задачи:

        «два шага назад»

        («то же место, что и позапрошлое?»)
    CodeComponent countreset_2
      Code Type = Auto->JS
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      Begin Routine:
        Nloop = 0
Flow
  Routine instruction_1
  LoopInitiator training_session loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine fix
    Routine buffering_0_2
    LoopInitiator training_2n loopType="TrialHandler"
      conditionsFile = filtered_seq_single_column_2n.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('sequence', [(2, 1), (2, 0), (2, 0), (1, 0), (2, 0), (0, 0), (0, 1), (0, 0)])]),
        OrderedDict([('sequence', [(1, 0), (1, 0), (1, 0), (1, 2), (2, 1), (2, 0), (2, 1), (1, 0)])]),
        OrderedDict([('sequence', [(2, 2), (1, 1), (2, 0), (1, 1), (2, 0), (0, 1), (0, 1), (2, 0)])]),
        OrderedDict([('sequence', [(2, 1), (1, 2), (2, 1), (0, 2), (2, 1), (1, 1), (0, 2), (2, 1)])]),
        OrderedDict([('sequence', [(2, 1), (0, 2), (0, 0), (0, 2), (1, 2), (2, 1), (1, 2), (0, 2)])]),
        OrderedDict([('sequence', [(1, 2), (0, 0), (1, 2), (0, 0), (1, 2), (1, 0), (2, 1), (1, 2)])]),
        OrderedDict([('sequence', [(1, 0), (0, 0), (0, 0), (2, 0), (1, 1), (2, 0), (1, 1), (2, 0)])]),
        OrderedDict([('sequence', [(1, 0), (1, 2), (2, 0), (0, 2), (0, 2), (0, 2), (2, 2), (0, 2)])]),
        OrderedDict([('sequence', [(2, 1), (1, 0), (2, 1), (1, 0), (1, 0), (1, 0), (2, 2), (0, 2)])]),
        OrderedDict([('sequence', [(1, 0), (2, 2), (0, 2), (2, 2), (1, 1), (2, 1), (2, 1), (2, 1)])]),
        OrderedDict([('sequence', [(0, 0), (2, 1), (0, 0), (0, 0), (2, 1), (1, 1), (1, 0), (1, 1)])]),
        OrderedDict([('sequence', [(1, 1), (1, 1), (0, 1), (0, 2), (0, 1), (0, 2), (2, 0), (2, 2)])]),
        OrderedDict([('sequence', [(0, 0), (1, 2), (0, 0), (2, 2), (1, 0), (0, 1), (1, 0), (1, 2)])]),
        OrderedDict([('sequence', [(0, 2), (2, 0), (0, 2), (2, 2), (0, 2), (2, 1), (1, 1), (1, 1)])]),
        OrderedDict([('sequence', [(2, 0), (0, 1), (2, 0), (2, 0), (0, 0), (2, 0), (1, 2), (2, 1)])]),
        OrderedDict([('sequence', [(2, 1), (2, 1), (2, 2), (0, 2), (2, 2), (2, 0), (2, 2), (1, 0)])])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
      Routine fix
      Routine test_2n
    LoopTerminator training_2n
    Routine fix
    Routine buffering_2_3
    LoopInitiator training_3n loopType="TrialHandler"
      conditionsFile = filtered_seq_single_column_3n.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('sequence', [(2, 2), (0, 2), (2, 0), (2, 2), (1, 2), (2, 0), (2, 0), (1, 0), (2, 1)])]),
        OrderedDict([('sequence', [(2, 1), (2, 2), (2, 1), (0, 1), (1, 1), (2, 1), (2, 2), (1, 1), (0, 2)])]),
        OrderedDict([('sequence', [(0, 1), (2, 1), (1, 2), (0, 1), (2, 1), (1, 2), (1, 1), (0, 1), (1, 0)])]),
        OrderedDict([('sequence', [(1, 1), (2, 1), (2, 2), (1, 0), (0, 0), (2, 2), (2, 0), (0, 1), (2, 2)])]),
        OrderedDict([('sequence', [(2, 2), (1, 2), (0, 2), (2, 2), (1, 1), (2, 0), (1, 0), (0, 2), (2, 0)])]),
        OrderedDict([('sequence', [(0, 2), (1, 1), (0, 1), (0, 1), (1, 1), (2, 2), (0, 1), (1, 2), (2, 1)])]),
        OrderedDict([('sequence', [(0, 0), (2, 1), (1, 1), (2, 1), (1, 2), (1, 1), (2, 1), (2, 2), (1, 2)])]),
        OrderedDict([('sequence', [(0, 0), (0, 1), (0, 1), (1, 1), (0, 1), (1, 2), (0, 0), (0, 1), (1, 2)])]),
        OrderedDict([('sequence', [(0, 2), (2, 1), (2, 1), (1, 0), (0, 0), (1, 2), (1, 0), (0, 0), (0, 2)])]),
        OrderedDict([('sequence', [(2, 0), (0, 1), (1, 1), (1, 0), (0, 2), (1, 2), (1, 0), (0, 1), (1, 2)])]),
        OrderedDict([('sequence', [(1, 2), (1, 0), (0, 1), (1, 2), (2, 2), (2, 0), (1, 0), (2, 2), (0, 1)])]),
        OrderedDict([('sequence', [(0, 1), (0, 1), (2, 1), (1, 2), (0, 1), (0, 1), (1, 2), (1, 2), (0, 1)])]),
        OrderedDict([('sequence', [(2, 2), (1, 0), (0, 2), (2, 2), (1, 0), (2, 1), (1, 0), (2, 2), (2, 0)])]),
        OrderedDict([('sequence', [(0, 2), (1, 2), (2, 0), (0, 2), (1, 0), (0, 2), (0, 0), (2, 2), (0, 2)])])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
      Routine fix
      Routine test_3n
    LoopTerminator training_3n
    Routine fix
    Routine buffering_3_4
    LoopInitiator training_4n loopType="TrialHandler"
      conditionsFile = filtered_seq_single_column_4n.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('sequence', [(2, 1), (2, 0), (2, 1), (2, 0), (2, 1), (2, 2), (2, 1), (2, 0), (0, 2), (1, 1)])]),
        OrderedDict([('sequence', [(1, 1), (0, 2), (0, 1), (2, 0), (2, 2), (0, 2), (0, 0), (0, 2), (2, 2), (0, 1)])]),
        OrderedDict([('sequence', [(0, 0), (0, 2), (1, 1), (0, 0), (0, 1), (1, 0), (2, 2), (1, 2), (0, 1), (1, 0)])]),
        OrderedDict([('sequence', [(2, 1), (2, 0), (2, 2), (1, 1), (2, 1), (2, 0), (1, 0), (0, 2), (1, 2), (1, 0)])]),
        OrderedDict([('sequence', [(1, 1), (0, 0), (2, 2), (0, 1), (0, 0), (2, 0), (0, 1), (0, 2), (0, 0), (2, 0)])]),
        OrderedDict([('sequence', [(0, 1), (0, 1), (1, 1), (2, 1), (2, 0), (0, 0), (1, 0), (2, 0), (2, 0), (0, 0)])]),
        OrderedDict([('sequence', [(1, 1), (0, 2), (2, 0), (0, 1), (1, 2), (1, 0), (2, 0), (2, 2), (1, 2), (2, 2)])]),
        OrderedDict([('sequence', [(0, 0), (2, 1), (1, 2), (0, 1), (2, 1), (2, 2), (1, 2), (0, 1), (1, 0), (2, 2)])]),
        OrderedDict([('sequence', [(1, 1), (0, 1), (0, 1), (2, 0), (1, 1), (1, 1), (2, 2), (0, 0), (1, 1), (1, 2)])]),
        OrderedDict([('sequence', [(0, 0), (2, 1), (2, 0), (0, 1), (1, 1), (2, 1), (2, 0), (1, 1), (0, 0), (0, 2)])]),
        OrderedDict([('sequence', [(2, 2), (1, 2), (2, 0), (0, 2), (0, 1), (1, 2), (2, 0), (1, 1), (1, 0), (1, 1)])]),
        OrderedDict([('sequence', [(0, 0), (2, 2), (1, 1), (0, 0), (1, 1), (2, 2), (0, 1), (0, 0), (0, 0), (2, 1)])]),
        OrderedDict([('sequence', [(2, 1), (1, 0), (2, 2), (2, 2), (2, 1), (0, 1), (2, 2), (0, 1), (0, 2), (0, 0)])])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
      Routine fix
      Routine test_4n
    LoopTerminator training_4n
    Routine test_confirm
  LoopTerminator training_session
  Routine instruction_2
  Routine buffering_0_2
  LoopInitiator allrep_2nback loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator trials_2nback loopType="TrialHandler"
      conditionsFile = filtered_seq_single_column_2n.csv
      loopType = random
      nReps = 1
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      conditions:
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      Routine fix
      Routine trial_2n
    LoopTerminator trials_2nback
    Routine timebreak
  LoopTerminator allrep_2nback
  Routine buffering_2_3
  LoopInitiator allrep_3nback loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator trials_3nback loopType="TrialHandler"
      conditionsFile = filtered_seq_single_column_3n.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('sequence', [(2, 2), (0, 2), (2, 0), (2, 2), (1, 2), (2, 0), (2, 0), (1, 0), (2, 1)])]),
        OrderedDict([('sequence', [(2, 1), (2, 2), (2, 1), (0, 1), (1, 1), (2, 1), (2, 2), (1, 1), (0, 2)])]),
        OrderedDict([('sequence', [(0, 1), (2, 1), (1, 2), (0, 1), (2, 1), (1, 2), (1, 1), (0, 1), (1, 0)])]),
        OrderedDict([('sequence', [(1, 1), (2, 1), (2, 2), (1, 0), (0, 0), (2, 2), (2, 0), (0, 1), (2, 2)])]),
        OrderedDict([('sequence', [(2, 2), (1, 2), (0, 2), (2, 2), (1, 1), (2, 0), (1, 0), (0, 2), (2, 0)])]),
        OrderedDict([('sequence', [(0, 2), (1, 1), (0, 1), (0, 1), (1, 1), (2, 2), (0, 1), (1, 2), (2, 1)])]),
        OrderedDict([('sequence', [(0, 0), (2, 1), (1, 1), (2, 1), (1, 2), (1, 1), (2, 1), (2, 2), (1, 2)])]),
        OrderedDict([('sequence', [(0, 0), (0, 1), (0, 1), (1, 1), (0, 1), (1, 2), (0, 0), (0, 1), (1, 2)])]),
        OrderedDict([('sequence', [(0, 2), (2, 1), (2, 1), (1, 0), (0, 0), (1, 2), (1, 0), (0, 0), (0, 2)])]),
        OrderedDict([('sequence', [(2, 0), (0, 1), (1, 1), (1, 0), (0, 2), (1, 2), (1, 0), (0, 1), (1, 2)])]),
        OrderedDict([('sequence', [(1, 2), (1, 0), (0, 1), (1, 2), (2, 2), (2, 0), (1, 0), (2, 2), (0, 1)])]),
        OrderedDict([('sequence', [(0, 1), (0, 1), (2, 1), (1, 2), (0, 1), (0, 1), (1, 2), (1, 2), (0, 1)])]),
        OrderedDict([('sequence', [(2, 2), (1, 0), (0, 2), (2, 2), (1, 0), (2, 1), (1, 0), (2, 2), (2, 0)])]),
        OrderedDict([('sequence', [(0, 2), (1, 2), (2, 0), (0, 2), (1, 0), (0, 2), (0, 0), (2, 2), (0, 2)])])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
      Routine fix
      Routine trial_3n
    LoopTerminator trials_3nback
    Routine timebreak
  LoopTerminator allrep_3nback
  Routine buffering_3_4
  LoopInitiator allrep_4nback loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator trials_4nback loopType="TrialHandler"
      conditionsFile = filtered_seq_single_column_4n.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('sequence', [(2, 1), (2, 0), (2, 1), (2, 0), (2, 1), (2, 2), (2, 1), (2, 0), (0, 2), (1, 1)])]),
        OrderedDict([('sequence', [(1, 1), (0, 2), (0, 1), (2, 0), (2, 2), (0, 2), (0, 0), (0, 2), (2, 2), (0, 1)])]),
        OrderedDict([('sequence', [(0, 0), (0, 2), (1, 1), (0, 0), (0, 1), (1, 0), (2, 2), (1, 2), (0, 1), (1, 0)])]),
        OrderedDict([('sequence', [(2, 1), (2, 0), (2, 2), (1, 1), (2, 1), (2, 0), (1, 0), (0, 2), (1, 2), (1, 0)])]),
        OrderedDict([('sequence', [(1, 1), (0, 0), (2, 2), (0, 1), (0, 0), (2, 0), (0, 1), (0, 2), (0, 0), (2, 0)])]),
        OrderedDict([('sequence', [(0, 1), (0, 1), (1, 1), (2, 1), (2, 0), (0, 0), (1, 0), (2, 0), (2, 0), (0, 0)])]),
        OrderedDict([('sequence', [(1, 1), (0, 2), (2, 0), (0, 1), (1, 2), (1, 0), (2, 0), (2, 2), (1, 2), (2, 2)])]),
        OrderedDict([('sequence', [(0, 0), (2, 1), (1, 2), (0, 1), (2, 1), (2, 2), (1, 2), (0, 1), (1, 0), (2, 2)])]),
        OrderedDict([('sequence', [(1, 1), (0, 1), (0, 1), (2, 0), (1, 1), (1, 1), (2, 2), (0, 0), (1, 1), (1, 2)])]),
        OrderedDict([('sequence', [(0, 0), (2, 1), (2, 0), (0, 1), (1, 1), (2, 1), (2, 0), (1, 1), (0, 0), (0, 2)])]),
        OrderedDict([('sequence', [(2, 2), (1, 2), (2, 0), (0, 2), (0, 1), (1, 2), (2, 0), (1, 1), (1, 0), (1, 1)])]),
        OrderedDict([('sequence', [(0, 0), (2, 2), (1, 1), (0, 0), (1, 1), (2, 2), (0, 1), (0, 0), (0, 0), (2, 1)])]),
        OrderedDict([('sequence', [(2, 1), (1, 0), (2, 2), (2, 2), (2, 1), (0, 1), (2, 2), (0, 1), (0, 2), (0, 0)])])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
      Routine fix
      Routine trial_4n
    LoopTerminator trials_4nback
    Routine timebreak
  LoopTerminator allrep_4nback
  Routine goodbye
